PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'version': '1', 'session': '001', 'friend': '', 'other': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2021.1.4
  Window size (pixels) = [2048, 1152]
  color = black
  expName = SLA_pyempathy
  logging level = debug
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Routines
  Routine Instructions1
    TextComponent instructions_text1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = $intromsg1
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    KeyboardComponent Instructions_keys1
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent intro_code
      Code Type = Auto->JS
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      Before Experiment:
        intromsg1 = "In this experiment, you are going to make a series of monetary decisions. \n\nYou will have $24 to start with in this experiment.\n\n  You will have the opportunity to add to this amount based on your decisions.  Press 'space' to continue."

        intromsg2= "On all trials of the experiment, you will be deciding between: \n\n(1) a  50% monetary gamble\n\n OR:\n\n(2) an 100% (i.e. guaranteed) monetary option.\n\n\nOn most trials, you will be presented with a choice between a 50% chance of winning or losing money and a 100% chance of gaining nothing ($0). \n\n\nOn some trials, the choice will be between a 50% chance of gaining money or gaining $0 and a 100% chance of gaining a different monetary amount.  \n\n\nPress 'space' to continue."

        intromsg3= "You will be making three sets of choices throughout the course of the experiment, with a different allotment of $24 each time.  \n\n Some of your choices will affect only you, others will affect someone else.\n\n You will press the ‘1’ key to choose the gamble or the ‘2’ key to choose the guaranteed option, given the amounts shown. \n\n\n Please press ‘space’ to watch a short demonstration of what each trial will look like. "

        extoptext = "$2.00"

        exbottomtext = "-$3.00"

        excertain = "$1.00"

        exampletext1 = "So, if you choose the option on the left, \nyou will have a 50% chance of gaining ($2) \nand a 50% chance of losing (-$3),\nout of your allotted $24."

        exampletext2 = "If you choose the option on the right, \n you have a 100% chance (or a guarantee)  \n of gaining the given amount.\n In this case, if chosen, you would gain a guaranteed $1."

        selfstarttext = "You have completed the practice trials. \n For the first task, you will be making choices only for yourself. \n You have $24 to use in this task. \n You will have the opportunity to add to this amount based on your decisions.There will be short breaks built into the tasks that will allow you to proceed by pressing the ‘space’ bar. \n Your decisions and outcomes will affect only you. \n\n Press ‘space’ to begin"
  Routine Instructions2
    TextComponent Instructions_text2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = $intromsg2
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    KeyboardComponent Instructions_keys2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions3
    TextComponent Instructions_text3
      disabled = True
      letterHeight = 0.038
      startVal [time (s)] = 0.0
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      text:
        Press 'space' to continue.
    KeyboardComponent Instructions_keys3
      allowedKeys = 'space'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Example
    PolygonComponent Example_topbox
      fillColor = black
      pos = [-.5,0.2]
      shape = rectangle
      size = (0.5, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 35
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    PolygonComponent Example_bottombox
      fillColor = black
      pos = [-0.5, -0.2]
      shape = rectangle
      size = (0.5, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 35
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    PolygonComponent Example_100
      fillColor = black
      pos = (0.5, 0)
      shape = rectangle
      size = (0.5, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 35
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    TextComponent Example_toptext
      letterHeight = 0.05
      pos = [-.5,0.2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 35
      text = $extoptext
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    TextComponent Example_bottomtext
      letterHeight = 0.05
      pos = [-0.5, -0.2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 35
      text = $exbottomtext
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    TextComponent Example_100text
      letterHeight = 0.05
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 35
      text = $excertain
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    TextComponent Example_instext1
      letterHeight = 0.02
      pos = (0, 0.4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
      text = For each trial, you will be making a choice between a 50/50 gamble or a 100% guaranteed amount, given the amounts displayed.
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    TextComponent Example_instext2
      color = yellow
      letterHeight = 0.02
      pos = (-0.5, 0.4)
      startVal [time (s)] = 5
      stopVal [duration (s)] = 10
      text = $exampletext1
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    TextComponent Example_instext3
      color = yellow
      letterHeight = 0.02
      pos = (0.5, 0.4)
      startVal [time (s)] = 15
      stopVal [duration (s)] = 10
      text = $exampletext2 
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    TextComponent Example_cue
      color = yellow
      letterHeight = 0.1
      startVal [time (s)] = 25
      stopVal [duration (s)] = 10
      text = ?
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    TextComponent Example_instext4
      color = yellow
      letterHeight = 0.02
      pos = (0, 0.2)
      startVal [time (s)] = 25
      stopVal [duration (s)] = 10
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      text:
        You will be cued to indicate
        your answer with a "?" in the center
        You will have 2 seconds to respond.
    TextComponent Example_text5
      color = yellow
      letterHeight = 0.017
      pos = (0, -0.2)
      startVal [time (s)] = 25
      stopVal [duration (s)] = 10
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      text:
        When cued:

        Press the ‘1’ key to choose the gamble on the left.

        Press the ‘2’ key to choose the guaranteed option on the right.
    TextComponent Example_text6
      letterHeight = 0.03
      pos = (0, 0.1)
      startVal [time (s)] = 35
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      text:
        After you make your choice, there will be a very short delay and then you will be shown the outcome of your choice.

        If you accepted the gamble, you will see whether you won or lost the associated amount.

        If you chose the guaranteed amount, you will see confirmation of your choice with the associated amount.

        If you fail to respond within 2 seconds, a “#” will be displayed instead, indicating that no response was recorded— so please be sure to respond quickly!

        Following this, you will see a short fixation and then the next trial will begin.
    TextComponent Example_text7
      color = yellow
      letterHeight = 0.03
      pos = (0, -0.2)
      startVal [time (s)] = 45
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      text:
        Press ‘1’ to continue to the experiment
        Press ‘2’ to watch this demonstration again
    KeyboardComponent dem_continue
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 45
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    CodeComponent code_2
      Code Type = Auto->JS
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      Each Frame:
        # this will loop back to  start of demonstration if the user presses a key to repeat
        if dem_continue.keys == '2':
           #continueRoutine = True
           RepeatExampleLoop.finished = False
        else:
           #continueRoutine = False
           RepeatExampleLoop.finished = True
  Routine Pre_Practice
    TextComponent Pre_Practice_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Let’s start with some practice trials so you get used to the timing of the trials and have a chance to practice responding.

        Press ‘space’ to begin.
    KeyboardComponent Pre_Practice_keys
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Self_Start
    TextComponent Self_Start_Text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = $selfstarttext
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    KeyboardComponent Self_Start_keys
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Practice
    PolygonComponent Practice_topbox
      fillColor = black
      pos = [-.5,0.2]
      shape = rectangle
      size = (0.5, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    PolygonComponent Practice_bottombox
      fillColor = black
      pos = [-0.5, -0.2]
      shape = rectangle
      size = (0.5, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    PolygonComponent Practice_100
      fillColor = black
      pos = (0.5, 0)
      shape = rectangle
      size = (0.5, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent Practice_toptext
      letterHeight = 0.05
      pos = [-.5,0.2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $amount_1
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    TextComponent Practice_bottomtext
      letterHeight = 0.05
      pos = [-0.5, -0.2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text [set every repeat]:
        $amount_2
    TextComponent Practice_100text
      letterHeight = 0.05
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $certain
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    TextComponent Practice_cue
      color = yellow
      letterHeight = 0.1
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      text = ?
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    KeyboardComponent Practice_keyboard
      allowedKeys [set every repeat] = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
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    CodeComponent insertOutcome
      Code Type = Auto->JS
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      Begin Experiment:
        outcomeMsg = ' '
      Each Frame:
        if  Practice_keyboard.keys == '1':
            outcomeMsg = (f'You chose the gamble and {gamble_outcome} {gamble_amount}')
        elif Practice_keyboard.keys == '2':
            outcomeMsg = (f'You chose the certain amount of {certain}')  #%certain
        else:
            outcomeMsg = '#'
  Routine Practice_Cross
    TextComponent Practice_Fix
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine Practice_Outcome
    TextComponent Outcome_Text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $outcomeMsg
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  Routine Practice_userResponse
  Routine Self_Task
    CodeComponent code_7
      Code Type = Auto->JS
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      Each Frame:
        trial_start = globalClock.getTime()
    PolygonComponent Self_topbox
      fillColor = black
      pos = [-.5,0.2]
      shape = rectangle
      size = (0.5, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    PolygonComponent Self_bottombox
      fillColor = black
      pos = [-0.5, -0.2]
      shape = rectangle
      size = (0.5, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    PolygonComponent Self_100
      fillColor = black
      pos = (0.5, 0)
      shape = rectangle
      size = (0.5, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent Self_toptext
      letterHeight = 0.05
      pos = [-.5,0.2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $risky_gain
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    TextComponent Self_bottomtext
      letterHeight = 0.05
      pos = [-0.5, -0.2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text [set every repeat]:
        $risky_loss
    TextComponent Self_100text
      letterHeight = 0.05
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $alt_certain
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    TextComponent Self_cue
      color = yellow
      letterHeight = 0.1
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      text = ?
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    KeyboardComponent Self_keyboard
      allowedKeys [set every repeat] = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      store = first key
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    CodeComponent Self_insertOutcome
      Code Type = Auto->JS
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      Begin Experiment:
        Self_outcomeMsg = '#'
      Each Frame:
        reaction_time= globalClock.getTime()
        if Self_keyboard.keys == '1':
            Self_outcomeMsg = (f'You chose the gamble and {task_gamble_outcome} {task_gamble_amount}')
        elif Self_keyboard.keys == '2':
            Self_outcomeMsg = (f'You chose the certain amount of {alt_certain}')  #%certain
        else:
            Self_outcomeMsg = '#'

        # note to Dominic: i created two clock variables: one for the trial's start (named trial_start in the code_7 component) and one for the reaction time (reaction_time [see above]). im unsure if the reaction_time variable is in the right place, considering this component lives at the very end of the Each Frame routine so it may not accurately capture the exact point responses were made, so i feel it is worth going through and comparing the difference between trial_start and reaction_time to psychopy's internal RT feature. if not, it may require moving some of the above components around to ensure the reaction_time clock is put into the right place. The other piece of the code for the ISI duration is in the code component in Self_ISI,. (feel free to message me if you have questions)
      End Routine:
        #if Self_keyboard.keys in ['', [], None]:  # No response was made
        #    Self_keyboard.keys = None
        #    Self_keyboard.rt = 0
        #Self_TaskLoop.addData('Self_keyboard.keys',Self_keyboard.keys)
        #Self_TaskLoop.addData('Self_keyboard.rt',Self_keyboard.rt)
        #if Self_keyboard.keys != None:  # we had a response
        #    Self_TaskLoop.addData('Self_keyboard.rt', Self_keyboard.rt)
        #Self_TaskLoop.addData('Self_keyboard.started', Self_keyboard.tStartRefresh)
        #Self_TaskLoop.addData('Self_keyboard.stopped', Self_keyboard.tStopRefresh)
  Routine Self_Outcome
    TextComponent Self_Outcome_Text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $Self_outcomeMsg
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    CodeComponent code_3
      Code Type = Auto->JS
  Routine Other_Task_2
    PolygonComponent Practice_topbox_5
      fillColor = black
      pos = [-.5,0.2]
      shape = rectangle
      size = (0.5, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent Practice_bottombox_5
      fillColor = black
      pos = [-0.5, -0.2]
      shape = rectangle
      size = (0.5, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent Practice_104
      fillColor = black
      pos = (0.5, 0)
      shape = rectangle
      size = (0.5, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent Practice_toptext_5
      letterHeight = 0.05
      pos = [-.5,0.2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $amount_1
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    TextComponent Practice_bottomtext_5
      letterHeight = 0.05
      pos = [-0.5, -0.2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text [set every repeat]:
        $amount_2
    TextComponent Practice_100text_5
      letterHeight = 0.05
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $certain
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    TextComponent Practice_cue_5
      color = yellow
      letterHeight = 0.1
      startVal [time (s)] = .5
      stopVal [duration (s)] = 4.5
      text = ?
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    KeyboardComponent Practice_keyboard_5
      allowedKeys [set every repeat] = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 4.5
      store = first key
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    CodeComponent insertOutcome_5
      Code Type = Auto->JS
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      Before Experiment:
        outcomeMsg = ' '
      Each Frame:
        if Practice_keyboard.keys == ' ' ||  'None'
            outcomeMsg = '#'
        else if Practice_keyboard.keys == '1':
            outcomeMsg = (f'You chose the gamble and {gamble_outcome} {gamble_amount}')
        else if Practice_keyboard.keys == '2':
            outcomeMsg = (f'You chose the certain amount of {certain}')  #%certain
  Routine Self_Block
    TextComponent Self_Block_Msg
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Good job.

        Press the space bar once you’re ready to continue the task.
    KeyboardComponent Self_block_keyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Selfblock
    CodeComponent Self_blockMsg_2
      Code Type = Auto->JS
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      Each Frame:
        if not Self_TaskLoop.thisN in [31, 63]: # establishes two blocks per 32 trials
            continueRoutine = False # if not trial 31 or 63, skip routine completely
        else:
            Self_TaskLoop.finished = False
    TextComponent Self_BlockText
      letterHeight = 0.1
      startVal [time (s)] = 0
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      text:
        Good job!

        Press the space bar once you’re ready to continue to the rest of the task.
    KeyboardComponent Self_blockkeyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
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  Routine Selfblock_2
    TextComponent Self_BlockText_2
      letterHeight = 0.1
      startVal [time (s)] = 0
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      text:
        Good job!

        Press the space bar once you’re ready to continue to the task.
    KeyboardComponent Self_block_keyboard_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    CodeComponent Self_blockMsg_3
      Code Type = Auto->JS
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      Begin Experiment:
        #selfblockMsg = 0
      Each Frame:
        #SelfBlock.finished = True
  Routine Friend_Start
    CodeComponent friendMsgcode
      Code Type = Auto->JS
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      Begin Experiment:
        friendsname = expInfo['friend']
        friendMsg = (f'For the second part of the task, suppose that your friend {friendsname} is in desperate need of money to pay off his/her credit card bills. \n\n\n In the following task, you will be making choices for {friendsname}. You will have $24 to use in this task. \n\n You will have the opportunity to add to this amount based on your decisions. The outcomes of each of your decisions will affect your friend, {friendsname}. \n\n\n Press ‘space’ to continue.')
    TextComponent Friend_Start_Text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = $friendMsg
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    KeyboardComponent Friend_Start_keys
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Friend_Task
    PolygonComponent Friend_topbox
      fillColor = black
      pos = [-.5,0.2]
      shape = rectangle
      size = (0.5, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    PolygonComponent Friend_bottombox
      fillColor = black
      pos = [-0.5, -0.2]
      shape = rectangle
      size = (0.5, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    PolygonComponent Friend_100
      fillColor = black
      pos = (0.5, 0)
      shape = rectangle
      size = (0.5, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent Friend_toptext
      letterHeight = 0.05
      pos = [-.5,0.2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $risky_gain
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    TextComponent Friend_bottomtext
      letterHeight = 0.05
      pos = [-0.5, -0.2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $risky_loss
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    TextComponent Friend_100text
      letterHeight = 0.05
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $alt_certain
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    TextComponent Friend_cue
      color = yellow
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
      text = ?
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    KeyboardComponent Friend_keyboard
      allowedKeys [set every repeat] = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
      store = first key
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    CodeComponent Friend_insertOutcome
      Code Type = Auto->JS
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      Begin Experiment:
        Friend_outcomeMsg = '#'
      Each Frame:
        if Friend_keyboard.keys == '1':
            Friend_outcomeMsg = (f'You chose the gamble and {task_gamble_outcome} {task_gamble_amount}')
        elif Friend_keyboard.keys == '2':
            Friend_outcomeMsg = (f'You chose the certain amount of {alt_certain}')  #%certain
        else:
            Friend_outcomeMsg = '#'
  Routine Friend_Outcome
    TextComponent Friend_Outcome_Text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $Friend_outcomeMsg
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  Routine Self_Rating_Scale
    TextComponent Self_ScaleText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = How did you feel when making choices for yourself?
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    SliderComponent Self_ScaleSlider
      color = white
      forceEndRoutine = True
      granularity = 0
      labels [set every repeat] = -2,-1,0,1,2
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = ['slider']
      ticks = 1,2,3,4,5
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  Routine Friend_RatingScale
    TextComponent Friend_ScaleText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = How did you feel when [friend_outcome] for your friend?
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    SliderComponent Friend_ScaleSlider
      color = white
      forceEndRoutine = True
      granularity = 0
      labels [set every repeat] = -2,-1,0,1,2
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = ['slider']
      ticks = 1,2,3,4,5
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  Routine Other_Start
    CodeComponent otherMsgcode
      Code Type = Auto->JS
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      Begin Experiment:
        othername = expInfo['other']
        otherMsg = (f'For the third and final part of the task, suppose that your friend, {othername} is in desperate need of money to pay off his/her credit card bills. \n\n\n In the following task, you will be making choices for {othername}. \n\n\n You will have $24 to use in this task. \n\n You will have the opportunity to add to this amount based on your decisions. The outcomes of each of your decisions will affect your friend, {othername}. Press ‘space’ to continue.')
    TextComponent Other_Start_Text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        For the third and final part of the task, suppose that you meet a stranger who is in desperate need of money to pay off his/her credit card bills.

        In the following task, you will be making choices for this stranger.

        You will have \$24 to use in this task.

        You will have the opportunity to add to this amount based on your decisions.

        The outcomes of each of your decisions will affect this stranger.


        Press ‘space’ to continue.
    KeyboardComponent Other_Start_keys
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Other_Task
    PolygonComponent Other_topbox
      fillColor = black
      pos = [-.5,0.2]
      shape = rectangle
      size = (0.5, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    PolygonComponent Other_bottombox
      fillColor = black
      pos = [-0.5, -0.2]
      shape = rectangle
      size = (0.5, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    PolygonComponent Other_100
      fillColor = black
      pos = (0.5, 0)
      shape = rectangle
      size = (0.5, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent Other_toptext
      letterHeight = 0.05
      pos = [-.5,0.2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $risky_gain
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    TextComponent Other_bottomtext
      letterHeight = 0.05
      pos = [-0.5, -0.2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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      text [set every repeat]:
        $risky_loss
    TextComponent Other_100text
      letterHeight = 0.05
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $alt_certain
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    TextComponent Other_cue
      color = yellow
      letterHeight = 0.1
      startVal [time (s)] = .5
      stopVal [duration (s)] = 2
      text = ?
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    KeyboardComponent Other_keyboard
      allowedKeys [set every repeat] = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
      store = first key
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    CodeComponent Other_insertOutcome
      Code Type = Auto->JS
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      Begin Experiment:
        Other_outcomeMsg = ' '
      Each Frame:
        if Other_keyboard.keys == '1':
            Other_outcomeMsg = (f'You chose the gamble and {task_gamble_outcome} {task_gamble_amount}')
        elif Other_keyboard.keys == '2':
            Other_outcomeMsg = (f'You chose the certain amount of {alt_certain}')  #%certain
        else:
            Other_outcomeMsg = '#'
  Routine Other_Outcome
    TextComponent Outcome_Text_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $Other_outcomeMsg
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  Routine ratingscale
    TextComponent Self_ScaleText_
      letterHeight = 0.06
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = How did you feel when making choices for yourself?
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    SliderComponent slider
      color = white
      forceEndRoutine = False
      granularity = 0
      labels = -2,-1,0,1,2
      letterHeight = 0.05
      pos = (0, -0.06)
      size = (1.0, 0.06)
      startVal [time (s)] = 0.0
      storeHistory = True
      styles = ['rating', 'triangleMarker']
      ticks = -2,-1,0,1,2
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    CodeComponent slider_code
      Code Type = Auto->JS
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      Begin Routine:
        Self_slider.markerPos= -2
        Self_slider.rating = -2
      Each Frame:
        Self_slider.getMouseResponses()
        Self_ratingvalue = Self_slider.getRating()
        #if not Self_slider.getRating() and Self_slider.markerPos in [-2]:
        if Self_slider.getRating() and Self_slider.markerPos != None:
            Self_ratingvalue = Self_slider.getRating()
            if Self_ratingvalue < -1.5:
               Self_slider.markerPos= -2
               Self_slider.rating = -2
               print(Self_slider.rating)
            elif Self_ratingvalue > -1.5 and Self_ratingvalue < -0.5:
               Self_slider.markerPos = -1
               Self_slider.rating = -1
               print(Self_slider.rating)
            elif Self_ratingvalue > -0.5 and Self_ratingvalue < 0.5:
               Self_slider.markerPos = 0
               Self_slider.rating = 0
               print(Self_slider.rating)
            elif Self_ratingvalue  > 0.5  and Self_ratingvalue < 1.5:
               Self_slider.markerPos = 1
               Self_slider.rating = 1
               print(Self_slider.rating)
            elif Self_ratingvalue > 1.5 and Self_ratingvalue <= 2:
               Self_slider.markerPos = 2
               Self_slider.rating = 2
               print(Self_slider.rating)
    PolygonComponent slider_button
      fillColor = black
      pos = (0, -0.3)
      shape = rectangle
      size = (0.3, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent slider_button_text
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Click here
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    MouseComponent slider_button_mouse
      clickable = slider_button
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        if expInfo['version'] ==1:
            friendstart = 1
            otherstart=1
        elif expInfo['version'] ==2:
            friendstart=0
            otherstart=1
  Routine Self_ratingscale
    TextComponent Self_slider_button_text
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      text = Press the spacebar to submit
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    TextComponent Self_SliderText
      letterHeight = 0.06
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      text [set every repeat] = How did you feel when making choices for yourself?
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    SliderComponent Self_slider
      color = white
      forceEndRoutine = False
      granularity = 0
      labels = -2,-1,0,1,2
      letterHeight = 0.05
      pos = (0, -0.06)
      size = (1.0, 0.06)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      storeHistory = True
      styles = ['rating']
      ticks = -2,-1,0,1,2
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    CodeComponent Self_slider_code
      Code Type = Auto->JS
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      Begin Routine:
        #Self_slider.markerPos= -2
        #Self_slider.rating = -2
      Each Frame:
        #Self_slider.getMouseResponses()
        #Self_ratingvalue = Self_slider.getRating()
        ##if not Self_slider.getRating() and Self_slider.markerPos in [-2]:
        #if Self_slider.getRating() and Self_slider.markerPos != None:
        #    Self_ratingvalue = Self_slider.getRating()
        #    if Self_ratingvalue < -1.5:
        #       Self_slider.markerPos= -2
        #       Self_slider.rating = -2
        #    elif Self_ratingvalue > -1.5 and Self_ratingvalue < -0.5:
        #       Self_slider.markerPos = -1
        #       Self_slider.rating = -1
        #    elif Self_ratingvalue > -0.5 and Self_ratingvalue < 0.5:
        #       Self_slider.markerPos = 0
        #       Self_slider.rating = 0
        #    elif Self_ratingvalue  > 0.5  and Self_ratingvalue < 1.5:
        #       Self_slider.markerPos = 1
        #       Self_slider.rating = 1
        #    elif Self_ratingvalue > 1.5 and Self_ratingvalue <= 2:
        #       Self_slider.markerPos = 2
        #       Self_slider.rating = 2
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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    PolygonComponent Self_slider_button
      disabled = True
      fillColor = black
      pos = (0, -0.3)
      shape = rectangle
      size = (0.3, 0.1)
      startVal [time (s)] = 0.0
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    MouseComponent Self_slider_button_mouse
      clickable = Self_slider
      disabled = True
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine Friend_ratingscale
    CodeComponent friendsliderMsgcode
      Code Type = Auto->JS
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      Begin Experiment:
        friendsliderMsg = (f'How did you feel while making choices for {friendsname}?')
    TextComponent Friend_Scale_Text
      letterHeight = 0.06
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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      text [set every repeat]:
        $friendsliderMsg
    SliderComponent Friend_slider
      color = white
      forceEndRoutine = False
      granularity = 0
      labels = -2,-1,0,1,2
      letterHeight = 0.05
      pos = (0, -0.06)
      size = (1.0, 0.06)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      storeHistory = True
      styles = ['rating', 'triangleMarker']
      ticks = -2,-1,0,1,2
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    CodeComponent Friend_slider_code
      Code Type = Auto->JS
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      Begin Routine:
        Friend_slider.markerPos= -2
        Friend_slider.rating = -2
      Each Frame:
        Friend_slider.getMouseResponses()
        Friend_ratingvalue =Friend_slider.getRating()
        if Friend_slider.getRating() and Friend_slider.markerPos != None:
            Friend_ratingvalue = Friend_slider.getRating()
            if Friend_ratingvalue < -1.5:
               Friend_slider.markerPos= -2
               Friend_slider.rating = -2
            elif Friend_ratingvalue > -1.5 and Friend_ratingvalue < -0.5:
               Friend_slider.markerPos = -1
               Friend_slider.rating = -1
            elif Friend_ratingvalue > -0.5 and Friend_ratingvalue < 0.5:
               Friend_slider.markerPos = 0
               Friend_slider.rating = 0
            elif Friend_ratingvalue  > 0.5  and Friend_ratingvalue < 1.5:
               Friend_slider.markerPos = 1
               Friend_slider.rating = 1
            elif Friend_ratingvalue > 1.5 and Friend_ratingvalue <= 2:
               Friend_slider.markerPos = 2
               Friend_slider.rating = 2
    TextComponent Friend_slider_button_text
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      text = Press the spacebar to submit
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    PolygonComponent Friend_slider_button
      disabled = True
      fillColor = black
      pos = (0, -0.3)
      shape = rectangle
      size = (0.3, 0.1)
      startVal [time (s)] = 0.0
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    MouseComponent Friend_slider_button_mouse
      clickable = Friend_slider_button
      disabled = True
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine Other_ratingscale
    TextComponent Other_Scale_Text
      letterHeight = 0.06
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      text = How did you feel while making choices for a stranger?
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    TextComponent Other_slider_button_text
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      text = Press the spacebar to submit
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    SliderComponent Other_slider
      color = white
      forceEndRoutine = False
      granularity = 0
      labels = -2,-1,0,1,2
      letterHeight = 0.05
      pos = (0, -0.06)
      size = (1.0, 0.06)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      storeHistory = True
      styles = ['rating']
      ticks = -2,-1,0,1,2
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    CodeComponent othersliderMsgcode
      Code Type = Auto->JS
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      Begin Experiment:
        othersliderMsg = (f'How did you feel while making choices for {othername}?')
    CodeComponent Other_slider_code
      Code Type = Auto->JS
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      Begin Routine:
        #Other_slider.markerPos= -2
        #Other_slider.rating = -2
      Each Frame:
        #Other_slider.getMouseResponses()
        #Other_ratingvalue = Other_slider.getRating()
        #if Other_slider.getRating() and Other_slider.markerPos != None:
        #    Other_ratingvalue = Other_slider.getRating()
        #    if Other_ratingvalue < -1.5:
        #       Other_slider.markerPos= -2
        #       Other_slider.rating = -2
        #    elif Other_ratingvalue > -1.5 and Other_ratingvalue < -0.5:
        #       Other_slider.markerPos = -1
        #       Other_slider.rating = -1
        #    elif Other_ratingvalue > -0.5 and Other_ratingvalue < 0.5:
        #       Other_slider.markerPos = 0
        #       Other_slider.rating = 0
        #    elif Other_ratingvalue  > 0.5  and Other_ratingvalue < 1.5:
        #       Other_slider.markerPos = 1
        #       Other_slider.rating = 1
        #    elif Other_ratingvalue > 1.5 and Other_ratingvalue <= 2:
        #       Other_slider.markerPos = 2
        #       Other_slider.rating = 2
    PolygonComponent Other_slider_button
      disabled = True
      fillColor = black
      pos = (0, -0.3)
      shape = rectangle
      size = (0.3, 0.1)
      startVal [time (s)] = 0.0
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    MouseComponent Other_slider_button_mouse
      clickable = Other_slider_button
      disabled = True
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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  Routine thankyou
    TextComponent thankyou_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating!

        Press ‘space’ to end the task
    KeyboardComponent thankyou_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Otherblock
    CodeComponent Other_blockMsg
      Code Type = Auto->JS
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      Each Frame:
        if not Other_TaskLoop.thisN in [29, 59]: # establishes two blocks per 30 trials
            continueRoutine = False # if not trial 31 or 63, skip routine completely
        else:
            Other_TaskLoop.finished = False
    TextComponent Other_BlockText
      letterHeight = 0.1
      startVal [time (s)] = 0
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      text:
        Good job!

        Press the space bar once you’re ready to continue to the task.
    KeyboardComponent Other_blockkeyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
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  Routine Friendblock
    CodeComponent Friend_blockMsg
      Code Type = Auto->JS
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      Each Frame:
        if not Friend_TaskLoop.thisN in [29, 59]: # establishes two blocks per 32 trials
            continueRoutine = False # if not trial 31 or 63, skip routine completely
        else:
            Friend_TaskLoop.finished = False
    TextComponent Friend_BlockText
      letterHeight = 0.1
      startVal [time (s)] = 0
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      text:
        Good job!

        Press the space bar once you’re ready to continue to the task.
    KeyboardComponent Friend_blockkeyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
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  Routine VersionInitate
    CodeComponent versiontaskcode
      Code Type = Auto->JS
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      Begin Experiment:
        friendstart = 0
        otherstart = 0
      Begin Routine:
        if int(expInfo['version'])== 1:
            friendstart= 1
            otherstart= 1
        elif int(expInfo['version']) == 2:
            friendstart= 0
            otherstart= 1
  Routine V2
    CodeComponent v2_code
      Code Type = Auto->JS
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      Begin Experiment:
        if int(expInfo['version']) ==2:
            friendstart=1
            otherstart=0
  Routine V2_2
    CodeComponent v2_code_2
      Code Type = Auto->JS
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      Begin Routine:
        # executes for version 2 only - reorders friend and other tasks
        if int(expInfo['version']) ==2:
            friendstart=1 #only runs friend loop on 2nd repetition
            otherstart=0
  Routine Instructions
    TextComponent Instructions_text4
      letterHeight = 0.029
      startVal [time (s)] = 0.0
      text = $intromsg3
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    KeyboardComponent Instructions_keys4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Self_ITI
    TextComponent ITI_self
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ITI_s
      text [set every repeat] = +
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  Routine Self_ISI
    TextComponent ISI_self
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9999
      text [set every repeat] = +
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        trial_durations = 0
        trial_counter = 0

        #test out builder scrpt and coder script with clocks at desired places
      Begin Routine:
        if Self_keyboard.keys in ['', [], None]:
            isi_duration =
            trial_duration = ISI_s
        elif Self_keyboard.keys == '1' or '2':
            reaction_time = float(Self_keyboard.rt)
            trial_duration = (2-reaction_time)+(ISI_s)
        #
        #
        ##if Self_keyboard.keys == '1' or '2':
        ##    reaction_time = float(Self_keyboard.rt)
        ##    trial_duration = (2-reaction_time)+(ISI_s)
        ##
        ##elif Self_keyboard.keys in ['', [], None]:
        ##    reaction_time = 0
        ##    trial_duration = ISI_s
        #
        ##print('rt: %.12f'% (Self_keyboard.rt))
        #print(type(Self_keyboard.rt))
        #print(Self_keyboard.rt)
        #routineTimer.add(-9999.000000 + trial_duration)
      End Routine:
        Self_TaskLoop.addData('t_end_trial', tThisFlipGlobal)
  Routine Friend_ISI
    TextComponent ISI_friend
      durationEstim = ISI_f
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = (2-Friend_keyboard.rt+ISI_f)
      text = +
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  Routine Friend_ITI
    TextComponent ITI_friend
      letterHeight = 0.1
      stopVal [duration (s)] = ITI_f
      text [set every repeat] = +
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  Routine Other_ISI
    TextComponent ISI_other
      durationEstim = ISI_o
      letterHeight = 0.2
      stopVal [duration (s)] = (2-Other_keyboard.rt+ISI_o)
      text [set every repeat] = +
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  Routine Other_ITI
    TextComponent ITI_other
      letterHeight = 0.1
      stopVal [duration (s)] = ITI_o
      text [set every repeat] = +
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  Routine End_ITI
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        #remainder = remainder_s + remainder_f + remainder_o
    TextComponent ITI_end
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = remainder
      text [set every repeat] = +
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  Routine timing
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        expected = 2-Self_keyboard.rt+ISI_s
        actual = Self_Outcome_Text.tStartRefresh - ISI_self.tStartRefresh

        difference_ISI = expected-actual
        #remainder_s= sum(difference_ISI)

        Self_TaskLoop.addData('actual_ISIdur', actual)
        Self_TaskLoop.addData('expected_ISIdur', expected)
        Self_TaskLoop.addData('difference_ISI', difference_ISI)
        #Self_TaskLoop.addData('remainder_S', remainder_S)
Flow
  Routine Instructions1
  Routine Instructions2
  Routine Instructions
  LoopInitiator RepeatExampleLoop loopType="TrialHandler"
    loopType = sequential
    nReps = 0
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    Routine Example
  LoopTerminator RepeatExampleLoop
  Routine Pre_Practice
  LoopInitiator Practice_trials loopType="TrialHandler"
    conditionsFile = SLA_PracSheet.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Weight', 1.0), ('amount_1', '$2.00'), ('amount_2', '-$3.75'), ('certain', '$0.00'), ('gamble_outcome', 'lost'), ('gamble_amount', '-$3.75'), ('partner_name', 'Katie')]),
      OrderedDict([('Weight', 1.0), ('amount_1', '$17.00'), ('amount_2', '$0.00'), ('certain', '$9.00'), ('gamble_outcome', 'won'), ('gamble_amount', '$17.00'), ('partner_name', 'Katie')]),
      OrderedDict([('Weight', 1.0), ('amount_1', '$9.00'), ('amount_2', '-$15.75'), ('certain', '$0.00'), ('gamble_outcome', 'lost'), ('gamble_amount', '-$15.75'), ('partner_name', 'Katie')]),
      OrderedDict([('Weight', None), ('amount_1', None), ('amount_2', None), ('certain', None), ('gamble_outcome', None), ('gamble_amount', None), ('partner_name', None)]),
      OrderedDict([('Weight', None), ('amount_1', None), ('amount_2', None), ('certain', None), ('gamble_outcome', None), ('gamble_amount', None), ('partner_name', None)]),
      OrderedDict([('Weight', None), ('amount_1', None), ('amount_2', None), ('certain', None), ('gamble_outcome', None), ('gamble_amount', None), ('partner_name', None)]),
      OrderedDict([('Weight', None), ('amount_1', None), ('amount_2', None), ('certain', None), ('gamble_outcome', None), ('gamble_amount', None), ('partner_name', None)]),
      OrderedDict([('Weight', None), ('amount_1', None), ('amount_2', None), ('certain', None), ('gamble_outcome', None), ('gamble_amount', None), ('partner_name', None)])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
    Routine Practice
    Routine Practice_Cross
    Routine Practice_Outcome
    Routine Practice_Cross
  LoopTerminator Practice_trials
  Routine Self_Start
  LoopInitiator Self_TaskLoop loopType="TrialHandler"
    conditionsFile = Self_SLA_96.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Trial_num', 1), ('risky_gain', '$4.00'), ('risky_loss', '-$7.00'), ('alt_certain', '$0.00'), ('task_gamble_outcome', 'won'), ('task_gamble_amount', '$4.00'), ('ISI_s', 1.5), ('ITI_s', 1.5), ('block', 1)]),
      OrderedDict([('Trial_num', 2), ('risky_gain', '$2.00'), ('risky_loss', '-$3.75'), ('alt_certain', '$0.00'), ('task_gamble_outcome', 'lost'), ('task_gamble_amount', '-$3.75'), ('ISI_s', 1.5), ('ITI_s', 1.5), ('block', 1)]),
      OrderedDict([('Trial_num', 3), ('risky_gain', '$8.00'), ('risky_loss', '-$1.33'), ('alt_certain', '$0.00'), ('task_gamble_outcome', 'lost'), ('task_gamble_amount', '-$1.33'), ('ISI_s', 5.0), ('ITI_s', 1.5), ('block', 1)]),
      OrderedDict([('Trial_num', 4), ('risky_gain', '$5.00'), ('risky_loss', '-$3.13'), ('alt_certain', '$0.00'), ('task_gamble_outcome', 'lost'), ('task_gamble_amount', '-$3.13'), ('ISI_s', 5.0), ('ITI_s', 3.0), ('block', 1)]),
      OrderedDict([('Trial_num', 5), ('risky_gain', '$8.00'), ('risky_loss', '-$11.00'), ('alt_certain', '$0.00'), ('task_gamble_outcome', 'won'), ('task_gamble_amount', '$8.00'), ('ISI_s', 1.5), ('ITI_s', 1.5), ('block', 1)]),
      OrderedDict([('Trial_num', 6), ('risky_gain', '$4.00'), ('risky_loss', '-$0.67'), ('alt_certain', '$0.00'), ('task_gamble_outcome', 'lost'), ('task_gamble_amount', '-$0.67'), ('ISI_s', 5.0), ('ITI_s', 3.0), ('block', 1)])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
    Routine Self_Task
    Routine Self_ISI
    Routine Self_Outcome
    Routine Self_ITI
    Routine timing
    Routine Selfblock
  LoopTerminator Self_TaskLoop
  Routine Self_ratingscale
  Routine VersionInitate
  LoopInitiator RunLoop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = int(expInfo['version'])
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    LoopInitiator FriendLoop loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = friendstart
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      Routine Friend_Start
      LoopInitiator Friend_TaskLoop loopType="TrialHandler"
        conditionsFile = Friend_SLA_96.csv
        loopType = sequential
        nReps = 1
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        conditions:
          [OrderedDict([('Trial_num', 1), ('risky_gain', '$4.00'), ('risky_loss', '$0.00'), ('alt_certain', '$2.25'), ('task_gamble_outcome', 'won'), ('task_gamble_amount', '$4.00'), ('ISI', 1.5), ('ITI', 1.5), ('block', 1)]),
          OrderedDict([('Trial_num', 2), ('risky_gain', '$6.00'), ('risky_loss', '-$9.00'), ('alt_certain', '$0.00'), ('task_gamble_outcome', 'won'), ('task_gamble_amount', '$6.00'), ('ISI', 5.0), ('ITI', 1.5), ('block', 1)]),
          OrderedDict([('Trial_num', 3), ('risky_gain', '$9.00'), ('risky_loss', '-$4.50'), ('alt_certain', '$0.00'), ('task_gamble_outcome', 'won'), ('task_gamble_amount', '$9.00'), ('ISI', 3.0), ('ITI', 1.5), ('block', 1)]),
          OrderedDict([('Trial_num', 4), ('risky_gain', '$5.00'), ('risky_loss', '-$0.63'), ('alt_certain', '$0.00'), ('task_gamble_outcome', 'lost'), ('task_gamble_amount', '-$0.63'), ('ISI', 1.5), ('ITI', 3.0), ('block', 1)]),
          OrderedDict([('Trial_num', 5), ('risky_gain', '$19.00'), ('risky_loss', '$0.00'), ('alt_certain', '$8.00'), ('task_gamble_outcome', 'lost'), ('task_gamble_amount', '$0.00'), ('ISI', 5.0), ('ITI', 1.5), ('block', 1)]),
          OrderedDict([('Trial_num', 6), ('risky_gain', '$5.00'), ('risky_loss', '-$5.00'), ('alt_certain', '$0.00'), ('task_gamble_outcome', 'won'), ('task_gamble_amount', '$5.00'), ('ISI', 1.5), ('ITI', 3.0), ('block', 1)])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
        Routine Friend_Task
        Routine Friend_ISI
        Routine Friend_Outcome
        Routine Friend_ITI
        Routine Friendblock
      LoopTerminator Friend_TaskLoop
      Routine Friend_ratingscale
    LoopTerminator FriendLoop
    LoopInitiator OtherLoop loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = otherstart
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      Routine Other_Start
      LoopInitiator Other_TaskLoop loopType="TrialHandler"
        conditionsFile = Other_SLA_96.csv
        loopType = sequential
        nReps = 1
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        conditions:
          [OrderedDict([('Trial_num', 1), ('risky_gain', '$4.00'), ('risky_loss', '-$7.00'), ('alt_certain', '$0.00'), ('task_gamble_outcome', 'won'), ('task_gamble_amount', '$4.00'), ('ISI', 1.5), ('ITI', 5.0), ('block', 1)]),
          OrderedDict([('Trial_num', 2), ('risky_gain', '$13.00'), ('risky_loss', '$0.00'), ('alt_certain', '$6.00'), ('task_gamble_outcome', 'won'), ('task_gamble_amount', '$13.00'), ('ISI', 1.5), ('ITI', 1.5), ('block', 1)]),
          OrderedDict([('Trial_num', 3), ('risky_gain', '$17.00'), ('risky_loss', '$0.00'), ('alt_certain', '$9.00'), ('task_gamble_outcome', 'won'), ('task_gamble_amount', '$17.00'), ('ISI', 1.5), ('ITI', 5.0), ('block', 1)]),
          OrderedDict([('Trial_num', 4), ('risky_gain', '$9.00'), ('risky_loss', '-$13.50'), ('alt_certain', '$0.00'), ('task_gamble_outcome', 'lost'), ('task_gamble_amount', '-$13.50'), ('ISI', 5.0), ('ITI', 7.0), ('block', 1)]),
          OrderedDict([('Trial_num', 5), ('risky_gain', '$30.00'), ('risky_loss', '$0.00'), ('alt_certain', '$12.00'), ('task_gamble_outcome', 'won'), ('task_gamble_amount', '$30.00'), ('ISI', 3.0), ('ITI', 3.0), ('block', 1)]),
          OrderedDict([('Trial_num', 6), ('risky_gain', '$7.00'), ('risky_loss', '$0.00'), ('alt_certain', '$4.00'), ('task_gamble_outcome', 'lost'), ('task_gamble_amount', '$0.00'), ('ISI', 3.0), ('ITI', 1.5), ('block', 1)])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
        Routine Other_Task
        Routine Other_ISI
        Routine Other_Outcome
        Routine Other_ITI
        Routine Otherblock
      LoopTerminator Other_TaskLoop
      Routine Other_ratingscale
    LoopTerminator OtherLoop
    Routine V2_2
  LoopTerminator RunLoop
  Routine thankyou
  Routine End_ITI
